<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.Miniscope;assembly=Bonsai.Miniscope"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\MMKMissing\drivemazeMissing\testing_bonsai\test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>rootPath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WebcamImages</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UCLAMiniscopeV4">
          <p1:Index>1</p1:Index>
          <p1:LEDBrightness>11.356275303643725</p1:LEDBrightness>
          <p1:EWL>-64.976744186046517</p1:EWL>
          <p1:SensorGain>LOW</p1:SensorGain>
          <p1:FramesPerSecond>FPS10</p1:FramesPerSecond>
          <p1:LEDRespectsTrigger>true</p1:LEDRespectsTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MiniscopeImages</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion.Data</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MiniscopePosition</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MiniscopeImagesTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trigger</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Commutator</Name>
        <Description>Drives ONIX Commutator from BNO055 Quaterion data. Pressing down/up keys will manually turn the commutator, overrding the BNO055 heading input.
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Up</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>"{turn : 0.1}"</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Down</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>"{turn : -0.1}"</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Heading</ipy:Name>
              <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *
from math import atan2
@returns(float)
def process(value):

  q0 = value[0].Val0;
  q1 = value[1].Val0;
  q2 = value[2].Val0;
  q3 = value[3].Val0;

  return atan2((2 * (q0 * q3 + q1 * q2)), (1 - 2 * (q2**2 + q3**2)))</ipy:Script>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>heading_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>from math import pi

@returns(str)
def process(value):
  
  
  last = value.Item2

  curr = value.Item1
  a1 = curr + 2 * pi
  a2 = curr - 2 * pi
  pos = [curr, a1, a2]

  delta = [abs(x - last) for x in pos]

  p = pos[delta.index(min(delta))]

  turn = (p - last) / (2 * pi)

  return "{turn : %s}" % turn</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM10</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="12" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MiniscopeRecording</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>MiniscopePosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rootPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>miniscopePosition.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\MMKMissing\drivemazeMissing\testing_bonsai\testminiscope.avi</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MiniscopeImages</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rootPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>miniscope.avi</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Data\MMKMissing\drivemazeMissing\testing_bonsai\miniscope</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>DIB</cv:FourCC>
                <cv:FrameRate>10</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>MiniscopeImagesTimestamp</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rootPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>miniscopeFrames.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Data\MMKMissing\drivemazeMissing\testing_bonsai\testminiscope.avi</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WebcamImages</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rootPath</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>webcam.avi</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Data\MMKMissing\drivemazeMissing\testing_bonsai\testminiscope.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>10</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>start_rec</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseOr">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trigger</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>stop_rec</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="4" To="11" Label="Source1" />
      <Edge From="4" To="13" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>